PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  colPriority = {'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW', '': 'priority.EXCLUDE'}
  expName = action_recognition_experiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructionsRoutine
    RoutineSettingsComponent instructionsRoutine
      saveStartStop = False
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    TextComponent instruction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This experiment consists of three parts:

        1. First, you will be trained and tested on regular videos of human actions.
        2. Then, you will see videos of the same actions, where texture and shape information have been removed.
        3. Finally, you will see videos of the same actions without texture and shape, and with background flickering added.

        In each part, your task is to identify the action shown in each video by selecting one of five categories.

        We will record your response accuracy and reaction time for every video.

        Press the SPACEBAR to begin.
    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine ucf5TrainRoutine
    RoutineSettingsComponent ucf5TrainRoutine
      saveStartStop = False
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    MovieComponent trainVideo
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $video_file
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent trainLabel
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      text [set every repeat] = $label
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  Routine ucf5TestRoutine
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    MovieComponent testVideo
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $video_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent promptText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
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      text:
        Classify the action:
        1 = JumpingJack
        2 = Lunges
        3 = PullUps
        4 = PushUps
        5 = Swing
    KeyboardComponent testResponse
      allowedKeys = ['1', '2', '3', '4', '5']
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent testEval
      Code Type = Auto->JS
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      End Routine:
        # Compare participant response to correct key
        if testResponse.keys == str(correct_ans):
            correct = 1
        else:
            correct = 0

        # Save to the output file
        thisExp.addData('correct', correct)
        thisExp.addData('given_answer', testResponse.keys)
  Routine afd5TrainRoutine
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    MovieComponent trainVideoAFD
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $video_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent trainLabelAFD
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      text [set every repeat] = $label
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  Routine afd5TestRoutine
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    MovieComponent testVideoAFD
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $video_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent promptAFD
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
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      text:
        Classify the action:
        1 = JumpingJack
        2 = Lunges
        3 = PullUps
        4 = PushUps
        5 = Swing
    KeyboardComponent testResponseAFD
      allowedKeys = ['1', '2', '3', '4', '5']
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent scoreAFD
      Code Type = Auto->JS
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      End Routine:
        if testResponseAFD.keys == str(correct_ans):
            correct = 1
        else:
            correct = 0
        thisExp.addData('correct', correct)
        thisExp.addData('given_answer', testResponseAFD.keys)
  Routine goodbyeRoutine
    RoutineSettingsComponent goodbyeRoutine
      saveStartStop = False
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    TextComponent goodbyetext
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!
        You may now close this window by pressing SPACE.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_18
      Code Type = Py
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      End Experiment:
        try:
            import pandas as pd
            with pd.ExcelWriter(xlsx_out) as writer:
                for sheet, rows in agg_rows.items():
                    if rows:  # only write sheets that have data
                        df = pd.DataFrame(rows, columns=['video_id','correct_ans','participant_ans','response_RT'])
                        df.to_excel(writer, sheet_name=sheet.upper(), index=False)
            print(f"[OK] Saved results to: {xlsx_out}")
        except Exception as e:
            # Fallback: write 3 CSVs if Excel writer isn't available
            import csv
            for sheet, rows in agg_rows.items():
                if rows:
                    csv_path = os.path.join(_thisDir, 'data', f"{fileBase}_{sheet}.csv")
                    with open(csv_path, 'w', newline='', encoding='utf-8') as f:
                        w = csv.DictWriter(f, fieldnames=['video_id','correct_ans','participant_ans','response_RT'])
                        w.writeheader(); w.writerows(rows)
            print(f"[WARN] Could not write Excel ({e}). Wrote CSVs instead.")
  Routine ucfinstructions
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    TextComponent instruction_text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        UCF5 Testing Phase

        You will now see a series of short videos showing human actions.

        As soon as you recognize the action, press the SPACEBAR.
        Then, a screen will appear where you can choose the correct action using keys 1 to 5:

        1 = JumpingJack
        2 = Lunges
        3 = PullUps
        4 = PushUps
        5 = Swing

        Your reaction time and answer will be recorded for each video.

        If you do not respond within 30 seconds, the trial will automatically continue.

        Press SPACE to begin the test.
    KeyboardComponent key_resp_instruction_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if ucf5TestLoop.thisN > 0:
            continueRoutine = False
    CodeComponent globals
      Code Type = Auto->JS
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      Begin Experiment:
        UCF5_THRESH = 0.90      # eşik %90
        nBlockTrials = 75       # CSV'deki video sayısı

        # sayaçlar
        trialInBlock = 0
        nCorrect = 0
        nTotal = 0
        endOfBlock = False
        msg = ""
        showIntro = True        # retry'de talimatları gizlemek için
        passedBlock = False
    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        current_block = "ucf"
  Routine afdinstructions
    RoutineSettingsComponent afdinstructions
      saveStartStop = False
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    KeyboardComponent key_resp_instruction_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent instruction_text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Appearance-Free Testing Phase

        In this part, you will be shown videos of the same actions,
        but the texture and shape information has been removed.

        As soon as you recognize the action, press the SPACEBAR.
        You will then be shown a list of categories and must choose the correct one using keys 1 to 5:

        1 = JumpingJack
        2 = Lunges
        3 = PullUps
        4 = PushUps
        5 = Swing

        Your response accuracy and reaction time will be recorded.

        If you do not respond within 30 seconds, the trial will automatically continue.


        Press SPACE to begin this phase.
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        afdTrialCounter = 0
      Begin Routine:
        if afdTrialCounter > 0:
            continueRoutine = False
        afdTrialCounter += 1
    CodeComponent code_15
      Code Type = Py
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      Begin Routine:
        current_block = 'afd'
  Routine affTestRoutine
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  Routine affinstructions
    RoutineSettingsComponent affinstructions
      saveStartStop = False
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    KeyboardComponent key_resp_instruction_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Flicker Testing Phase

        In this final part, you will be shown videos of the same actions,
        but without shape or texture information, and with background flickering added.

        As soon as you recognize the action, press the SPACEBAR.
        You will then be shown a list of categories and must choose the correct one using keys 1 to 5:

        1 = JumpingJack
        2 = Lunges
        3 = PullUps
        4 = PushUps
        5 = Swing

        Your response accuracy and reaction time will be recorded.

        If you do not respond within 30 seconds, the trial will automatically continue.


        Press SPACE to begin the final phase.
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        affTrialCounter = 0
      Begin Routine:
        if affTrialCounter > 0:
            continueRoutine = False
        affTrialCounter += 1
    CodeComponent code_17
      Code Type = Py
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      Begin Routine:
        current_block = 'aff'
  Routine ucf5testresponseRoutine
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    KeyboardComponent key_resp_eval
      allowedKeys = ['1', '2', '3', '4', '5']
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent testEval_2
      Code Type = Py
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      End Routine:
        thisExp.addData('video_id',        video_file)
        thisExp.addData('correct_ans',     correct_ans)
        thisExp.addData('participant_ans', key_resp_eval.keys)   # change name if needed
        thisExp.addData('response_RT',     key_resp_eval.rt)

        log_trial_row(video_file, correct_ans, key_resp_eval.keys, key_resp_eval.rt)
    TextComponent promptText_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Classify the action:
        1 = JumpingJack
        2 = Lunges
        3 = PullUps
        4 = PushUps
        5 = Swing
    CodeComponent scoreTrial
      Code Type = Auto->JS
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      End Routine:
        # toplamı arttır
        nTotal += 1

        # --- yanıtı normalize et ---
        resp = key_resp_eval.keys
        if isinstance(resp, (list, tuple)):
            resp = resp[0] if resp else None
        resp_str = "" if resp is None else str(resp)
        if resp_str.startswith("num_") and len(resp_str) > 4:  # numpad -> '1'
            resp_str = resp_str.split("_", 1)[1]

        # --- doğru cevabı normalize et (1.0 -> "1") ---
        corr = str(int(float(correct_ans)))

        # --- puanla ---
        is_correct = 1 if (resp_str == corr) else 0
        nCorrect += is_correct
        thisExp.addData('is_correct', is_correct)

        # blok sayaçları
        trialInBlock += 1
        endOfBlock = (trialInBlock >= nBlockTrials)
  Routine ucf5testvideoRoutine
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    MovieComponent testVideo_2
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $video_file
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent spaceResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent timingCode
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.Clock()
        timedOut = False
      Each Frame:
        # If 30 s passes without SPACE, mark timeout and end the routine
        if (timer.getTime() >= 30) and (not spaceResp.keys):
            timedOut = True
            continueRoutine = False
      End Routine:
        thisExp.addData('timed_out', timedOut)        # True if 30s forced move
        thisExp.addData('video_id', video_file)       # optional, if you want it here too
    TextComponent videoPromptText
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        As soon as you recognize the action, press the SPACEBAR.
  Routine afd5testvideoRoutine
    RoutineSettingsComponent afd5testvideoRoutine
      saveStartStop = False
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    MovieComponent afdVideo
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $video_file
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent afdSpaceResp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent afdTimingCode
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.Clock()
        timedOut = False
      Each Frame:
        # Auto-advance after 30 s if SPACE wasn't pressed
        if (timer.getTime() >= 30) and (not afdSpaceResp.keys):
            timedOut = True
            continueRoutine = False
      End Routine:
        thisExp.addData('timed_out', timedOut)
    TextComponent afdVideoPromptText
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        As soon as you recognize the action, press the SPACEBAR.
  Routine afd5testresponseRoutine
    RoutineSettingsComponent afd5testresponseRoutine
      saveStartStop = False
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    KeyboardComponent afdResponseKey
      allowedKeys = ['1', '2', '3', '4', '5']
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent afdEvalCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('video_id', video_file)
        thisExp.addData('correct_ans', correct_ans)
        thisExp.addData('participant_ans', afdResponseKey.keys)
        thisExp.addData('response_RT', afdResponseKey.rt)
    TextComponent afdPromptText_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Classify the action:
        1 = JumpingJack
        2 = Lunges
        3 = PullUps
        4 = PushUps
        5 = Swing
    CodeComponent code_19
      Code Type = Py
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      End Routine:
        thisExp.addData('video_id',        video_file)           # or video_file_afd if different
        thisExp.addData('correct_ans',     correct_ans)
        thisExp.addData('participant_ans', afdResponseKey.keys)   # e.g., key_resp_afd
        thisExp.addData('response_RT',     afdResponseKey.rt)

        log_trial_row(video_file, correct_ans, afdResponseKey.keys, afdResponseKey.rt)
  Routine afftestvideoRoutine
    RoutineSettingsComponent afftestvideoRoutine
      saveStartStop = False
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    MovieComponent affVideo
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $video_file
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent affSpaceResp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent affTimingCode
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.Clock()
        timedOut = False
      Each Frame:
        if (timer.getTime() >= 30) and (not affSpaceResp.keys):
            timedOut = True
            continueRoutine = False
      End Routine:
        thisExp.addData('timed_out', timedOut)
    TextComponent affPromptText
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        As soon as you recognize the action, press the SPACEBAR.
  Routine afftestresponseRoutine
    RoutineSettingsComponent afftestresponseRoutine
      saveStartStop = False
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    KeyboardComponent affResponseKey
      allowedKeys = ['1', '2', '3', '4', '5']
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent affEvalCode
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('video_id', video_file)
        thisExp.addData('correct_ans', correct_ans)
        thisExp.addData('participant_ans', affResponseKey.keys)
        thisExp.addData('response_RT', affResponseKey.rt)
    TextComponent affPromptText_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Classify the action:
        1 = JumpingJack
        2 = Lunges
        3 = PullUps
        4 = PushUps
        5 = Swing
    CodeComponent code_20
      Code Type = Py
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      End Routine:
        thisExp.addData('video_id',        video_file)           # or video_file_aff if different
        thisExp.addData('correct_ans',     correct_ans)
        thisExp.addData('participant_ans', affResponseKey.keys)   # e.g., key_resp_aff
        thisExp.addData('response_RT',     affResponseKey.rt)

        log_trial_row(video_file, correct_ans, affResponseKey.keys, affResponseKey.rt)
  Routine auto_assign_group
    RoutineSettingsComponent auto_assign_group
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        group = int(expInfo.get('group', 1))
        thisExp.addData('group', group)
    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        # --- EXPORT SETUP ---
        from pathlib import Path

        participant = str(expInfo.get('participant', 'NA'))
        group = str(expInfo.get('group', expInfo.get('session', 'NA')))

        out_dir = Path(_thisDir) / "data"
        out_dir.mkdir(exist_ok=True)
        fileBase = f"p{participant}_g{group}"
        xlsx_out = out_dir / f"{fileBase}.xlsx"

        # buffers
        agg_rows = {"ucf": [], "afd": [], "aff": []}
        current_block = None

        def _to_scalar_key(k):
            if isinstance(k, (list, tuple)):
                return k[0] if len(k) else None
            return k

        def log_trial_row(video_id, correct_ans, resp_key, rt):
            rows = agg_rows.get(current_block)
            if rows is not None:
                rows.append({
                    "video_id": video_id,
                    "correct_ans": correct_ans,
                    "participant_ans": _to_scalar_key(resp_key),
                    "response_RT": rt,
                })
  Routine breakRoutine
    RoutineSettingsComponent breakRoutine
      disabled = True
      saveStartStop = False
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    TextComponent countdownText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You can take a short break now.
        This break will last approximately 2.5 minutes.

        When you are ready to continue, press SPACE.
    KeyboardComponent breakKey
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if afd5TestLoop.thisN > 0:  # loop adını bloğa göre değiştir
            continueRoutine = False
      Each Frame:
        countdownText.setText("Time remaining: " + str(int(150 - t)) + "s")
  Routine breakucf5
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    TextComponent countdownText_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You can take a short break now.
        This break will last approximately 2.5 minutes.
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if ucf5TestLoop.thisN > 0:
            continueRoutine = False
      Each Frame:
        # total break length in seconds
        BREAK_TOTAL = 150  # 2.5 minutes

        remaining = BREAK_TOTAL - t  # t = time since this routine started

        if remaining <= 0:
            # stop at zero, don't go negative, and auto-finish the routine
            countdownText_2.setText("Time remaining: 0 s")
            continueRoutine = False
        else:
            countdownText_2.setText(
                "Time remaining: " + str(int(remaining)) + " s\n\n"
            )
  Routine breakafd5
    RoutineSettingsComponent breakafd5
      saveStartStop = False
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    TextComponent countdownText_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You can take a short break now.
        This break will last approximately 2.5 minutes.
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if afd5TestLoop.thisN > 0:
            continueRoutine = False
      Each Frame:
        BREAK_TOTAL = 150  # seconds

        remaining = BREAK_TOTAL - t  # t = time since this routine started

        if remaining <= 0:
            # clamp to zero and auto-finish; no keypress needed or read
            countdownText_3.setText("Time remaining: 0 s")
            continueRoutine = False
        else:
            countdownText_3.setText(f"Time remaining: {int(remaining)} s")
  Routine break2afd5
    RoutineSettingsComponent break2afd5
      saveStartStop = False
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    TextComponent countdownText_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You can take a short break now.
        This break will last approximately 2.5 minutes.
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if afd5TestLoop2.thisN > 0:
            continueRoutine = False
      Each Frame:
        BREAK_TOTAL = 150  # seconds

        remaining = BREAK_TOTAL - t  # t = time since this routine started

        if remaining <= 0:
            # clamp to zero and auto-finish; no keypress needed or read
            countdownText_4.setText("Time remaining: 0 s")
            continueRoutine = False
        else:
            countdownText_4.setText(f"Time remaining: {int(remaining)} s")
  Routine break2aff
    RoutineSettingsComponent break2aff
      saveStartStop = False
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    TextComponent countdownText_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You can take a short break now.
        This break will last approximately 2.5 minutes.
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if affTestLoop2.thisN > 0:
            continueRoutine = False
      Each Frame:
        BREAK_TOTAL = 150  # seconds

        remaining = BREAK_TOTAL - t  # t = time since this routine started

        if remaining <= 0:
            # clamp to zero and auto-finish; no keypress needed or read
            countdownText_5.setText("Time remaining: 0 s")
            continueRoutine = False
        else:
            countdownText_5.setText(f"Time remaining: {int(remaining)} s")
  Routine breakaff
    RoutineSettingsComponent breakaff
      saveStartStop = False
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    TextComponent countdownText_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You can take a short break now.
        This break will last approximately 2.5 minutes.
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if affTestLoop.thisN > 0:
            continueRoutine = False
      Each Frame:
        BREAK_TOTAL = 150  # seconds

        remaining = BREAK_TOTAL - t  # t = time since this routine started

        if remaining <= 0:
            # clamp to zero and auto-finish; no keypress needed or read
            countdownText_6.setText("Time remaining: 0 s")
            continueRoutine = False
        else:
            countdownText_6.setText(f"Time remaining: {int(remaining)} s")
  Routine initroutine
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        import os, csv
        result_rows = []  # collect one row per test trial

        # Optional: hard-disable Builder’s own files in case a checkbox is stuck
        thisExp.savePickle = False     # disables .psydat
        thisExp.saveWideText = False   # disables trial-by-trial .csv
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        import os, csv
        result_rows = []  # collect one row per test trial

        # Optional: hard-disable Builder’s own files in case a checkbox is stuck
        thisExp.savePickle = False     # disables .psydat
        thisExp.saveWideText = False   # disables trial-by-trial .csv
  Routine ucf5RetryPrompt
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    CodeComponent retryGate
      Code Type = Auto->JS
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      Begin Routine:
        # sadece blok bittiğinde bu ekranı göster
        if not endOfBlock:
            continueRoutine = False
        else:
            # mesajı BAŞTA hazırla ki ekranda görünsün
            accuracy = (nCorrect / float(nBlockTrials)) if nBlockTrials > 0 else 0.0
            thisExp.addData('ucf5_accuracy', accuracy)

            passedBlock = (accuracy >= UCF5_THRESH)
            if passedBlock:
                msg = f"Accuracy: {accuracy*100:.0f}%\nGreat! Press SPACE to continue."
            else:
                msg = f"Accuracy: {accuracy*100:.0f}%\nPlease try again."
      End Routine:
        if endOfBlock:
            accuracy = (nCorrect / float(nBlockTrials)) if nBlockTrials > 0 else 0.0
            thisExp.addData('ucf5_accuracy', accuracy)

            if accuracy >= UCF5_THRESH:
                ucf5TestLoop.finished = True
                msg = f"Accuracy: {accuracy*100:.0f}%\nGreat! Press SPACE to continue."
            else:
                # yalnız video+response tekrar edilsin (talimat/break yok)
                nTotal = 0
                nCorrect = 0
                trialInBlock = 0
                endOfBlock = False
                showIntro = False
                msg = f"Accuracy: {accuracy*100:.0f}%\nPlease try again."
        if endOfBlock:
            if passedBlock:
                ucf5TestLoop.finished = True
            else:
                reset_block()        # nTotal/nCorrect/trialInBlock sıfırlansın, showIntro=False
    TextComponent retryText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent retrySpace
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine training_instructions
    RoutineSettingsComponent training_instructions
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Before the first evaluation, there is a training session where you will be shown example videos from each of the five categories.

        Each video will be labeled with the correct category name and will play twice automatically.

        Your task is simply to watch and learn how each action looks. No response is required during this phase.

        Press the SPACEBAR to begin the training session.

        Good luck!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if ucf5TrainOuterLoop.thisN > 0:
            continueRoutine = False
Flow
  Routine auto_assign_group
  Routine instructionsRoutine
  LoopInitiator ucf5TrainOuterLoop loopType="TrialHandler"
    conditionsFile = ucf5_training_conditions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('video_file', 'UCF5_RGB/training/v_JumpingJack_g25_c04.avi'), ('label', 'JumpingJack')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_JumpingJack_g25_c05.avi'), ('label', 'JumpingJack')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_JumpingJack_g25_c06.avi'), ('label', 'JumpingJack')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_JumpingJack_g25_c07.avi'), ('label', 'JumpingJack')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_Lunges_g25_c01.avi'), ('label', 'Lunges')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_Lunges_g25_c02.avi'), ('label', 'Lunges')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_Lunges_g25_c03.avi'), ('label', 'Lunges')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_Lunges_g25_c04.avi'), ('label', 'Lunges')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_PullUps_g25_c01.avi'), ('label', 'PullUps')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_PullUps_g25_c02.avi'), ('label', 'PullUps')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_PullUps_g25_c03.avi'), ('label', 'PullUps')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_PullUps_g25_c04.avi'), ('label', 'PullUps')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_PushUps_g25_c01.avi'), ('label', 'PushUps')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_PushUps_g25_c02.avi'), ('label', 'PushUps')]),
      OrderedDict([('video_file', 'UCF5_RGB/training/v_PushUps_g25_c03.avi'), ('label', 'PushUps')])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
    Routine training_instructions
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      conditions:
        [OrderedDict([('video_file', 'UCF5_RGB/training/v_JumpingJack_g25_c04.avi'), ('label', 'JumpingJack')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_JumpingJack_g25_c05.avi'), ('label', 'JumpingJack')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_JumpingJack_g25_c06.avi'), ('label', 'JumpingJack')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_JumpingJack_g25_c07.avi'), ('label', 'JumpingJack')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_Lunges_g25_c01.avi'), ('label', 'Lunges')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_Lunges_g25_c02.avi'), ('label', 'Lunges')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_Lunges_g25_c03.avi'), ('label', 'Lunges')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_Lunges_g25_c04.avi'), ('label', 'Lunges')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_PullUps_g25_c01.avi'), ('label', 'PullUps')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_PullUps_g25_c02.avi'), ('label', 'PullUps')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_PullUps_g25_c03.avi'), ('label', 'PullUps')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_PullUps_g25_c04.avi'), ('label', 'PullUps')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_PushUps_g25_c01.avi'), ('label', 'PushUps')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_PushUps_g25_c02.avi'), ('label', 'PushUps')]),
        OrderedDict([('video_file', 'UCF5_RGB/training/v_PushUps_g25_c03.avi'), ('label', 'PushUps')])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
      Routine ucf5TrainRoutine
    LoopTerminator trials
  LoopTerminator ucf5TrainOuterLoop
  LoopInitiator ucf5TestLoop loopType="TrialHandler"
    conditionsFile = sorted_test_list.csv
    loopType = sequential
    nReps = 999
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    conditions:
      [OrderedDict([('video_file', 'ucf5\\PushUps\\v_PushUps_g02_c04.avi'), ('label', 'PushUps'), ('correct_ans', 4)]),
      OrderedDict([('video_file', 'ucf5\\JumpingJack\\v_JumpingJack_g06_c04.avi'), ('label', 'JumpingJack'), ('correct_ans', 1)]),
      OrderedDict([('video_file', 'ucf5\\JumpingJack\\v_JumpingJack_g01_c05.avi'), ('label', 'JumpingJack'), ('correct_ans', 1)]),
      OrderedDict([('video_file', 'ucf5\\Swing\\v_Swing_g06_c06.avi'), ('label', 'Swing'), ('correct_ans', 5)]),
      OrderedDict([('video_file', 'ucf5\\Lunges\\v_Lunges_g01_c05.avi'), ('label', 'Lunges'), ('correct_ans', 2)]),
      OrderedDict([('video_file', 'ucf5\\Lunges\\v_Lunges_g06_c02.avi'), ('label', 'Lunges'), ('correct_ans', 2)]),
      OrderedDict([('video_file', 'ucf5\\PullUps\\v_PullUps_g01_c01.avi'), ('label', 'PullUps'), ('correct_ans', 3)]),
      OrderedDict([('video_file', 'ucf5\\PullUps\\v_PullUps_g20_c01.avi'), ('label', 'PullUps'), ('correct_ans', 3)]),
      OrderedDict([('video_file', 'ucf5\\PushUps\\v_PushUps_g01_c01.avi'), ('label', 'PushUps'), ('correct_ans', 4)]),
      OrderedDict([('video_file', 'ucf5\\Lunges\\v_Lunges_g06_c06.avi'), ('label', 'Lunges'), ('correct_ans', 2)]),
      OrderedDict([('video_file', 'ucf5\\Swing\\v_Swing_g06_c02.avi'), ('label', 'Swing'), ('correct_ans', 5)]),
      OrderedDict([('video_file', 'ucf5\\JumpingJack\\v_JumpingJack_g05_c06.avi'), ('label', 'JumpingJack'), ('correct_ans', 1)]),
      OrderedDict([('video_file', 'ucf5\\PushUps\\v_PushUps_g19_c04.avi'), ('label', 'PushUps'), ('correct_ans', 4)])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
    Routine breakucf5
    Routine ucfinstructions
    Routine ucf5testvideoRoutine
    Routine ucf5testresponseRoutine
    Routine ucf5RetryPrompt
  LoopTerminator ucf5TestLoop
  LoopInitiator afd5TestLoop loopType="TrialHandler"
    conditionsFile = sorted_test_list.csv
    loopType = sequential
    nReps = 1 if group == 1 else 0
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    conditions:
      [OrderedDict([('video_file', 'ucf5\\PushUps\\v_PushUps_g02_c04.avi'), ('label', 'PushUps'), ('correct_ans', 4)]),
      OrderedDict([('video_file', 'ucf5\\JumpingJack\\v_JumpingJack_g06_c04.avi'), ('label', 'JumpingJack'), ('correct_ans', 1)]),
      OrderedDict([('video_file', 'ucf5\\JumpingJack\\v_JumpingJack_g01_c05.avi'), ('label', 'JumpingJack'), ('correct_ans', 1)]),
      OrderedDict([('video_file', 'ucf5\\Swing\\v_Swing_g06_c06.avi'), ('label', 'Swing'), ('correct_ans', 5)]),
      OrderedDict([('video_file', 'ucf5\\Lunges\\v_Lunges_g01_c05.avi'), ('label', 'Lunges'), ('correct_ans', 2)]),
      OrderedDict([('video_file', 'ucf5\\Lunges\\v_Lunges_g06_c02.avi'), ('label', 'Lunges'), ('correct_ans', 2)]),
      OrderedDict([('video_file', 'ucf5\\PullUps\\v_PullUps_g01_c01.avi'), ('label', 'PullUps'), ('correct_ans', 3)]),
      OrderedDict([('video_file', 'ucf5\\PullUps\\v_PullUps_g20_c01.avi'), ('label', 'PullUps'), ('correct_ans', 3)]),
      OrderedDict([('video_file', 'ucf5\\PushUps\\v_PushUps_g01_c01.avi'), ('label', 'PushUps'), ('correct_ans', 4)]),
      OrderedDict([('video_file', 'ucf5\\Lunges\\v_Lunges_g06_c06.avi'), ('label', 'Lunges'), ('correct_ans', 2)]),
      OrderedDict([('video_file', 'ucf5\\Swing\\v_Swing_g06_c02.avi'), ('label', 'Swing'), ('correct_ans', 5)]),
      OrderedDict([('video_file', 'ucf5\\JumpingJack\\v_JumpingJack_g05_c06.avi'), ('label', 'JumpingJack'), ('correct_ans', 1)]),
      OrderedDict([('video_file', 'ucf5\\PushUps\\v_PushUps_g19_c04.avi'), ('label', 'PushUps'), ('correct_ans', 4)])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
    Routine breakafd5
    Routine afdinstructions
    Routine afd5testvideoRoutine
    Routine afd5testresponseRoutine
  LoopTerminator afd5TestLoop
  LoopInitiator affTestLoop loopType="TrialHandler"
    conditionsFile = sorted_test_list.csv
    loopType = sequential
    nReps = 1 if group == 2 else 0
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    conditions:
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    Routine breakaff
    Routine affinstructions
    Routine afftestvideoRoutine
    Routine afftestresponseRoutine
  LoopTerminator affTestLoop
  LoopInitiator affTestLoop2 loopType="TrialHandler"
    conditionsFile = sorted_test_list.csv
    loopType = sequential
    nReps = 1 if group == 1 else 0
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    conditions:
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    Routine break2aff
    Routine affinstructions
    Routine afftestvideoRoutine
    Routine afftestresponseRoutine
  LoopTerminator affTestLoop2
  LoopInitiator afd5TestLoop2 loopType="TrialHandler"
    conditionsFile = sorted_test_list.csv
    loopType = sequential
    nReps = 1 if group == 2 else 0
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    conditions:
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    Routine break2afd5
    Routine afdinstructions
    Routine afd5testvideoRoutine
    Routine afd5testresponseRoutine
  LoopTerminator afd5TestLoop2
  Routine goodbyeRoutine
